PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = experijment
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Routines
  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine sst
    PolygonComponent right
      fillColor = $[1,1,1]
      pos = (0.3, 0.5)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent left
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 6
      pos = (-0.3, 0.5)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent rdk
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text [set every repeat]:
        $direct
    MouseComponent mouse
      clickable = right, left
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = $soa
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = vol
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        soas = [0.1, 0.2, 0.3]
        soa = random.choice(soas)
      End Routine:
        thisExp.addData('corrAns', corrAns)
  Routine progress
    TextComponent next_button
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Next
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    MouseComponent mouse_2
      clickable = next_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = expcondfixed.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')]),
      OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 1), ('direct', 360), ('corrAns', 'None')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')]),
      OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 1), ('direct', 180), ('corrAns', 'None')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')]),
      OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 1), ('direct', 360), ('corrAns', 'None')]),
      OrderedDict([('vol', 1), ('direct', 180), ('corrAns', 'None')]),
      OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')]),
      OrderedDict([('vol', 0), ('direct', 180), ('corrAns', 'right')]),
      OrderedDict([('vol', 0), ('direct', 360), ('corrAns', 'left')])]
    Routine sst
    Routine progress
  LoopTerminator trials
